PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = bart2
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instructions
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    UnknownComponent instructions_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco
      image [set every repeat] = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent balão
      image = redBalloon.png
      pos = (-0.6, 0.3)
      saveStartStop = False
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent euro
      image [set every repeat] = euro.png
      pos = (0.6, 0.3)
      saveStartStop = False
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent balão_rebentado
      image [set every repeat] = balao_rebentado.jpeg
      pos = (-0.6, -0.1)
      saveStartStop = False
      size = (0.27, 0.27)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent perder_dinheiro
      image [set every repeat] = perder_dinheiro.jpeg
      pos = (0.6, -0.1)
      saveStartStop = False
      size = (0.30, 0.25)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruções1
      color = black
      font = Comic Sans
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Neste jogo tem de ganhar o máximo possível numa competição de encher balões.

        Cada vez que enche o balão, acumula euros.

        Quando quiser, pode parar de encher o balão e guardar esse valor.

        No entanto, se encher demasiadas vezes o balão e ele rebentar, perde o o valor acumulado nesse mesmo balão.
    ImageComponent seta_avançar
      image = Seta1.png
      pos = (0.5, -0.8)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_avançar_2
      letterHeight = 0.04
      pos = (0.5, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Avançar
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    MouseComponent mouse_1
      clickable = seta_avançar
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine final_score
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    UnknownComponent final_score_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco4
      image = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent finalScore
      color = black
      font = Comic Sans
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $f"Muito bem! Amealhou um total de {round(bankedEarnings, 2)}€"
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  Routine instructions_3
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    UnknownComponent instructions_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco1
      image = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent enter_tecla
      image = enter_tecla.jpeg
      pos = (-0.63, -0.15)
      saveStartStop = False
      size = (0.33, 0.09)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruções2
      color = black
      font = Comic Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Os balões podem rebentar a qualquer momento, desde o início.

        Mas, quanto mais encher, maior a probabilidade de ele rebentar.

        Isto significa que os balões podem ocasionalmente alcançar um tamanho em que quase preenchem o ecrã, mas a maioria vai rebentar muito antes disso.
        Deve pressionar:

         'ESPAÇO' para encher o balão

        'ENTER' para guardar o valor do balão que está a encher e avançar para o próximo balão

        Tem alguma dúvida?
    ImageComponent encher_balão
      image [set every repeat] = encher_balao.jpeg
      pos = (0.43, 0.02)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent guardar_dinheiro
      image = guardar_dinheiro.jpeg
      pos = (0.55, -0.15)
      saveStartStop = False
      size = (0.17, 0.16)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent seta_avançar_2
      image = Seta1.png
      pos = (0.5, -0.8)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_avançar
      letterHeight = 0.04
      pos = (0.5, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Avançar
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    MouseComponent mouse_2
      clickable = seta_avançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ITI
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    UnknownComponent ITI_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent image
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine trial_2
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    UnknownComponent trial
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco2
      image [set every repeat] = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent bankButton
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent updateEarnings
      Code Type = Py
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      Begin Experiment:
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
        nReps=0
      Begin Routine:
        if nReps==20:
            break
      Each Frame:
        thisBalloonEarnings=nPumps*0.50
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.00
          lastBalloonEarnings=0.00
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
        nReps=nReps+1
    ImageComponent balloonBody
      image [set every repeat] = redBalloon.png
      ori = 270
      pos [set every frame] = [0, -0.35 + balloonSize / 2]
      saveStartStop = False
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraRM1
      image [set every repeat] = molduraRM1e2.png
      pos = (-0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraRM2
      image [set every repeat] = molduraRM1e2.png
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraBVM
      image [set every repeat] = molduraBVM.png
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraBM
      image [set every repeat] = Bau.png
      pos = (0.65, 0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent reminderMsg1
      color = black
      font = Comic Sans
      letterHeight = 0.02
      pos = (-0.4,-0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ESPAÇO para encher o balão
      units = height
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    TextComponent reminderMsg2
      color = black
      font = Comic Sans
      letterHeight = 0.02
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ENTER para guardar o valor deste balão
      units = height
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    TextComponent balloonValMsg
      color = black
      font = Comic Sans
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Valor deste balão:\n{round(thisBalloonEarnings, 2)}€"
      units = height
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    TextComponent bankedMsg
      color = black
      font = Comic Sans
      letterHeight = 0.04
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Já ganhou:\n{round(bankedEarnings, 2)}€"
      units = height
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    CodeComponent checkKeys
      Code Type = Py
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      Before Experiment:
        nPumps=0
      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    CodeComponent setBalloonSize
      Code Type = Py
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      End Routine:
        #save data
        trials_2.addData('nPumps', nPumps)
        trials_2.addData('size', balloonSize)
        trials_2.addData('earnings', thisBalloonEarnings)
        trials_2.addData('popped', popped)
  Routine feedback_2
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    UnknownComponent feedback
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco3
      image [set every repeat] = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent checkPopped
      Code Type = Py
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      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("balloon_explosion.wav")
        coins = sound.Sound("coins.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Ups! Perdeu o valor deste balão!"
          bang.play()
        else:
          feedbackText=f"Guardou +{round(lastBalloonEarnings,2)}€"
          coins.play()
    TextComponent feedbackMsg22
      color = black
      font = Comic Sans
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedbackText
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    TextboxComponent feedbackMsg
      bold = False
      color = black
      disabled = True
      editable = False
      font = Comic Sans
      letterHeight = 0.09
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedbackText
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        bart_manual_count = bart_manual_count + 1
        bart_manual_resp[bart_manual_count] = {}
        bart_manual_resp[bart_manual_count]['user_pumps'] = nPumps
        bart_manual_resp[bart_manual_count]['max_pumps'] = maxPumps
        thisExp.addData('subjResponse', nPumps)
  Routine bart_auto
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    UnknownComponent bart_auto_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundo_branco_
      image = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent nova_tarefa
      color = black
      font = Comic Sans
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Agora passaremos a uma outra tarefa, parecida com a anterior!

        Pressione ENTER para começar a ler as instruções
    KeyboardComponent resposta3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        bart_auto_count = 0
        bart_auto_resp = {}
  Routine bart_manual
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    UnknownComponent bart_manual_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundo_branco
      image = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        bart_manual_count = 0
        bart_manual_resp = {}
        bankedEarnings=0
  Routine instructions_5
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    UnknownComponent instructions_6
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco5
      image = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent balão_1
      image [set every repeat] = balao_vermelho.jpeg
      pos = (-0.7, 0)
      size = (0.18, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent euro_1
      image = euro.png
      pos = (0.6, 0)
      size = (0.18, 0.195)
      startVal [time (s)] = 0.0
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    TextComponent instruções3
      color = black
      font = Comic Sans
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Este é um jogo em que tem de optimizar os seus ganhos numa competição de encher balões.

        Para cada balão que aparecer no ecrã, deverá definir um número de enchimentos. Cada enchimento acrescenta uma certa quantia em euros à sua conta fictícia.
        Os balões têm diferentes pontos de explosão, que variam entre o primeiro pump e o 128º pump (ou seja, uns explodirão com poucos enchimentos, enquanto outros quase preencherão o ecrã).

        Pressione a tecla ENTER para continuar a ler.
    KeyboardComponent resposta_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_7
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    UnknownComponent instructions_8
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco6
      image = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instruções4
      color = black
      font = Comic Sans
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      units = norm
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      text:
        No ecrã aparecerá uma caixa de texto em que deverá registar o número de enchimentos que pretende usar para o balão a aparecer de seguida.

        Depois de clicar para avançar, o balão aparece e encherá automaticamente até ao número definido, ou, se esse número for igual ou superior ao ponto de explosão desse balão específico, o balão explode.

        Se encher até ao número definido, arrecada o valor dos enchimentos desse balão; se, pelo contrário, o balão explodir, não ganha nada.

        Se compreendeu as instruções, prima a tecla ENTER para iniciar a experiência.
    KeyboardComponent resposta_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent encher_balão_1
      image [set every repeat] = encher_balao.jpeg
      pos = (-0.7, 0.1)
      size = (0.17, 0.19)
      startVal [time (s)] = 0.0
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    ImageComponent guardar_dinheiro_1
      image [set every repeat] = guardar_dinheiro.jpeg
      pos = (-0.8, -0.4)
      size = (0.18, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent balão_rebentado_
      image [set every repeat] = balao_rebentado.jpeg
      pos = (0.8, 0.1)
      size = (0.29, 0.30)
      startVal [time (s)] = 0.0
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    ImageComponent perder_dinheiro_
      image [set every repeat] = perder_dinheiro.jpeg
      pos = (0.8, -0.4)
      size = (0.32, 0.30)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        bankedEarnings=0.0
  Routine set_pumps
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    UnknownComponent set_pumps_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco7
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      font = Comic Sans
      letterHeight = 0.08
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = \n
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    TextComponent text
      color = black
      font = Comic Sans
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Defina o nº de enchimentos do próximo balão
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    ImageComponent moldura
      image [set every repeat] = molduraRM1e2.png
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      color = black
      font = Comic Sans
      letterHeight = 0.09
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = clique para avançar
      units = norm
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    MouseComponent mouse
      clickable = text_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        bankedEarnings2 = 0
      Each Frame:
        textbox.text = ''.join(c for c in textbox.text if c in ['0','1','2','3','4','5','6','7','8','9'])
      End Routine:
        if textbox.text == '':
            textbox.text = '0'
        user_pumps = textbox.text

        nPumps=0

        #bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0

        balloonSize=0.08
        balloonMsgHeight=0.01
        popped=False

        final_pump = min(int(user_pumps), maxPumps)

        #if int(user_pumps) > maxPumps:
        #    popped=True
        #    continueRoutine=False
    ImageComponent linha
      image [set every repeat] = linha.png
      pos = (0, -0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine trial_3
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    UnknownComponent trial_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent setBalloonSize2
      Code Type = Py
      Each Frame:
        balloonSize=0.1+nPumps*0.015
    CodeComponent checkKeys2
      Code Type = Py
      Each Frame:
        time.sleep(0.1)

        nPumps=nPumps+1

        #if event.getKeys(['space']):
        #    nPumps=nPumps+1
        #    if nPumps>maxPumps:
        #        popped=True
        #        continueRoutine=False

        ### este código diz-nos que quando o nº de pumps for superior
        ### ao máximo de pumps, o balão explode

        if nPumps>final_pump:
            continueRoutine=False

        if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    ImageComponent fundobranco8
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent updateEarnings2
      Code Type = Py
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      Before Experiment:
        import time
      Each Frame:
        if nPumps <= int(user_pumps):
            thisBalloonEarnings=nPumps*0.05
        else:
            thisBalloonEarnings=int(user_pumps)*0.05
    ImageComponent balloonBody2
      image [set every repeat] = redBalloon.png
      ori [set every frame] = 270
      pos [set every frame] = [0, -0.35 + balloonSize / 2]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraBVM_
      image [set every repeat] = molduraBVM.png
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent molduraBM_
      image [set every repeat] = Bau.png
      pos = (0.65, 0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent ballonValMsg
      color = black
      font = Comic Sans
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Valor deste balão:\n{round(thisBalloonEarnings, 2)}€"
      units = height
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    TextComponent bankedMsg_
      color = black
      font = Comic Sans
      letterHeight = 0.04
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Já ganhou:\n{round(bankedEarnings2, 2)}€"
      units = height
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  Routine code_block
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    UnknownComponent code_block_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("balloon_explosion.wav")
        coins = sound.Sound("coins.wav")
      Begin Routine:
        thisBalloonEarnings=int(user_pumps)*0.05

        #save data
        trials_2.addData('nPumps', nPumps)
        trials_2.addData('size', balloonSize)
        trials_2.addData('earnings', thisBalloonEarnings)
        trials_2.addData('popped', popped)



        #calculate cash 'earned'
        if int(user_pumps) < maxPumps:
            popped = False
            lastBalloonEarnings=thisBalloonEarnings

        else:
            popped = True
            thisBalloonEarnings=0.0
            lastBalloonEarnings=0.0



        bankedEarnings2 = bankedEarnings2+lastBalloonEarnings

        if popped==True:
          feedbackText="Ups! Perdeu o valor deste balão!"
          bang.play()
        else:
          feedbackText=f"Guardou +{round(lastBalloonEarnings,2)}€"
          coins.play()
  Routine feedback_3
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    UnknownComponent feedback_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco9
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent feedbackMsg__
      color = black
      font = Comic Sans
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $feedbackText
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    TextboxComponent feedbackMsg2
      bold = False
      color = black
      disabled = True
      editable = False
      font = Comic Sans
      letterHeight = 0.07
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $feedbackText
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        bart_auto_count = bart_auto_count + 1
        bart_auto_resp[bart_auto_count] = {}
        bart_auto_resp[bart_auto_count]['user_pumps'] = user_pumps
        bart_auto_resp[bart_auto_count]['max_pumps'] = maxPumps
  Routine final_score_3
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    UnknownComponent final_score_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent fundobranco10
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent finalScoref
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $f"Muito bem! Amealhou um total de {round(bankedEarnings, 2)}€"
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    CodeComponent code_5
      Code Type = Py
      End Routine:
        import pandas as pd
        from datetime import datetime

        df_auto = pd.DataFrame(bart_auto_resp).T.reset_index()
        df_auto = df_auto.rename(columns = {'index': 'trial'})

        df_manual = pd.DataFrame(bart_manual_resp).T.reset_index()
        df_manual = df_manual.rename(columns = {'index': 'trial'})

        now = datetime.now()
        current_time = now.strftime('%Y%m%d_%H:%M:%S')

        nome_do_individuo = expInfo['participant']
        df_auto.to_csv(f'auto_bart_{nome_do_individuo}_{current_time}.csv')
        df_manual.to_csv(f'manual_bart_{nome_do_individuo}_{current_time}.csv')
  Routine welcome
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    UnknownComponent welcome_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent _fundo_branco_
      image = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent welcome_
      color = black
      font = Comic Sans
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bem vindo/a!







        Desde já, obrigada pela sua participação!
    KeyboardComponent resposta_
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent smile
      image = smile_inicial.jpeg
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.029
      pos = (0, -0.55)
      saveStartStop = False
      startVal [time (s)] = 2
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      text:
        Para avançar pressione a tecla 'ENTER'
  Routine farwell
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    UnknownComponent farwell_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent _fundo_branco_final
      image = branco.jpeg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    TextComponent farwell_
      color = black
      font = Comic Sans
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        A tarefa terminou.


        A tua participação foi fundamental para a realização deste estudo!

        Obrigada!







        Obrigada mais uma vez!
    ImageComponent smile_final
      image = smile_final.jpeg
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine ITI_3
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    UnknownComponent ITI_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent image_2
      image [set every repeat] = branco.jpeg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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Flow
  Routine welcome
  Routine bart_manual
  Routine instructions
  Routine instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:128
    conditionsFile = trialTypes_B1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'blueBalloon.jpg', 'maxPumps': 1},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 2},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 3},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 4},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 5},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 6},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 7},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 8},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 9},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 10},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 11},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 12},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 13},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 14},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 15},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 16},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 17},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 18},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 19},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 20},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 21},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 22},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 23},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 24},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 25},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 26},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 27},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 28},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 29},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 30},
      {'imageFile': 'blueBalloon.jpg', 'maxPumps': 31}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
    Routine trial_2
    Routine feedback_2
  LoopTerminator trials_2
  Routine final_score
  Routine farwell
