PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  color = 1.0000, 1.0000, 1.0000
  expName = Trust Game 
  keyboardBackend = Pyglet
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Routines
  Routine trial
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    ImageComponent closeEnvelope
      image [set every repeat] = envelopeFechado.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent openEnvelope
      image [set every repeat] = envelopeAberto.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.6, 0.5)
      startVal [time (s)] = 2
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    ImageComponent SetaConfiar
      image [set every repeat] = Seta1.png
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 2
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    TextComponent Confiar1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = Confiar
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    MouseComponent ConfiarClick
      clickable = SetaConfiar
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    ImageComponent Player3
      image [set every repeat] = Player2.png
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 2
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    TextComponent Response
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.41)
      startVal [time (s)] = 2
      text [set every frame] = $respDisplay+"€" 
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    TextComponent Question
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 2
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      text [set every repeat]:
        Você tem 10€ para jogar.


        Quanto quer enviar ao outro jogador?
    KeyboardComponent keyResp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 2
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        SelfScore= 0
        Player2Score=0
        nReps=1
      Begin Routine:
        respDisplay = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()




            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
        respDisplayX3=int(respDisplay)*3
        SelfScore=SelfScore+(10-int(respDisplay))
        Player2Score=Player2Score+respDisplayX3
    ImageComponent SacoMoedas
      image [set every repeat] = SacoMoedas.png
      pos = (-0.5, 0.05)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 2
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    TextComponent Total1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.5, -0.06)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $f"O meu bolso \nTotal " +str(SelfScore) +" €"
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    TextComponent total2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.19)
      saveStartStop = False
      startVal [time (s)] = 2
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      text [set every repeat]:
        $f"Participante 2 \nTotal " + str(Player2Score) +" €"
    TextComponent RoundName
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.5, 0.45)
      saveStartStop = False
      startVal [time (s)] = 2
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      text [set every repeat]:
        $f"Ronda " + str(nReps)
  Routine EndScreen
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    TextComponent ThanksMessage
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text [set every repeat]:
        $f"Terminou o Jogo \n\n A sua pontuação final é de \n\n" + str(SelfScore) + " € \n\nIrá ser contactado posteriormente, caso seja selecionado no sorteio. \n\nMuito obrigada pela sua participação!"
    KeyboardComponent key_resp
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        thisExp.addData('subjTotal', SelfScore)
        thisExp.addData('P2Total', Player2Score)
  Routine CoverGame
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    ImageComponent CapaJogo
      image = Capa trust game.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent TítuloJogo
      color = -1.0000, -1.0000, -1.0000
      font = Comic Sans
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Jogo de Confiança
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    TextComponent TeclaAvançar
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.029
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Para avançar pressione a "BARRA DE ESPAÇO"
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    KeyboardComponent Avançar
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      syncScreenRefresh = False
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  Routine WaitForResponse
    RoutineSettingsComponent WaitForResponse
      stopVal [duration (s)] = $nWait
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    ImageComponent Waiting
      image [set every repeat] = Waiting.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.35, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        import random

        nWait = random.randint(3, 11)

        if nReps<5:
            respPlayer2 = random.randint(int(respDisplay), int(respDisplayX3))
        elif nReps >=6 and nReps <=10:
            respPlayer2 = random.randint(0, int(respDisplay))
        elif nReps >=11 and nReps <=15:
            respPlayer2 = random.randint(int(respDisplay), int(respDisplayX3))
        else:
            respPlayer2 =0
      End Routine:
        SelfScore=SelfScore+respPlayer2
        Player2Score=Player2Score-respPlayer2
        nReps=nReps+1
        thisExp.addData('P2Response', respPlayer2)
    TextComponent textWaiting
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A aguardar resposta do Participante 2 . . . 
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  Routine Decision1
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    ImageComponent closeEnvelopeD1
      image [set every repeat] = envelopeFechado.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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    TextComponent resultDecision1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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      text [set every repeat]:
        $f"Você enviou " + str(respDisplay) + " € \n\n\n\nO Participante 2 recebe \n\n" + str(respDisplayX3) +" €"
  Routine Feedback
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    ImageComponent Player2Feedback
      image [set every repeat] = Player2.png
      pos = (0.3, 0.1)
      saveStartStop = False
      size = (0.25, 0.3)
      startVal [time (s)] = 2
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    ImageComponent SacoMoedasFeedback
      image [set every repeat] = SacoMoedas.png
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 2
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    TextComponent Total2Feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.4, -0.15)
      saveStartStop = False
      startVal [time (s)] = 2
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      text [set every repeat]:
        $f"O meu bolso \n\nTotal " + str(SelfScore) + " €"
    ImageComponent SetaAvançar
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.2, 0.15)
      startVal [time (s)] = 2
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    TextComponent Avançar1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = Avançar
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    MouseComponent AvançarClick1
      clickable = SetaAvançar
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    TextComponent TotalFeedbackPlayer2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.3, -0.15)
      saveStartStop = False
      startVal [time (s)] = 2
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      text [set every repeat]:
        $f"Participante 2 \n\nTotal " +str(Player2Score) + " €"
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = 6
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    TextComponent textResponse
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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      text [set every repeat]:
        $f"O Participante 2 deu-lhe: \n\n + "
        + str(respPlayer2) + " €"
    ImageComponent imagePlayer2Response
      image = Player2.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.45, 0.5)
      startVal [time (s)] = 0.0
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  Routine WaitTreino
    RoutineSettingsComponent WaitTreino
      stopVal [duration (s)] = 7
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    TextComponent textTreino
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = Treino
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  Routine WaitJogo
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    TextComponent textJogo
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2
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      text:
        O Jogo vai começar!

        Tem alguma dúvida que queira esclarecer com o investigador antes do jogo começar?

        Se não tiver dúvidas, selecione a seta para avançar.
    CodeComponent codereset
      Code Type = Py
      End Routine:
        SelfScore=0
        Player2Score=0
        nReps=1
    ImageComponent SetaAvançar_3
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 2
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    MouseComponent AvançarClick
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine Instructions1
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    TextComponent text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Este jogo funciona com dinheiro fictício.

        No entanto, no final do jogo, o dinheiro que obtiver vai ser convertido em pontos para sortear um vale de 20€.

        Então, o objetivo deste jogo é obter o máximo de dinheiro possível.
    TextComponent TeclaAvançar_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.029
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = Para avançar pressione a SETA
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    ImageComponent SetaAvançar_4
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_3
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine Instructions2
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    TextComponent textInstructions2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Este jogo é jogado a pares.
        Você vai jogar com outro participante.

        Para ser anónimo o outro jogador vai ser chamado Participante 2.

        Ambos começam o jogo com 0€.

        O jogo é composto por 15 rondas.

        Em cada ronda você recebe 10€ para jogar.
    ImageComponent SetaAvançar_5
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_4
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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    ImageComponent imageP2
      image = Player2.png
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 1
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  Routine Instructions3
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    TextComponent textInstructions3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Depois de receber os 10€
        Você pode escolher se quer dividir, ou não, com o Participante 2.
        E quanto quer dividir.

        Pode escolher qualquer valor inteiro entre 0€ e 10€.

        Se escolher 0€:
        O Participante 2 não recebe nenhum dinheiro.
    ImageComponent SetaAvançar_6
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_5
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine PracticeBegin
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    TextComponent textPracticeBegin
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Cada ronda termina com a decisão do Participante 2.

        Começa uma nova ronda e volta a receber 10€ para jogar.

        O saco de moedas mostra o dinheiro total que acumula no jogo.
    ImageComponent SetaAvançar_2
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_2
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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    ImageComponent imageE1
      image = SacoMoedas.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 1
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  Routine Instructions4
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    TextComponent textInstructions4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Se escolher partilhar algum dinheiro:

        O Participante 2 recebe o dinheiro a triplicar.
        E depois pode escolher devolver-lhe algum dinheiro, ou não.
    ImageComponent SetaAvançar_7
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_6
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine InstructionEx
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    ImageComponent SetaAvançar_8
      image [set every repeat] = Seta1.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 3
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    MouseComponent AvançarClick_7
      clickable = SetaAvançar_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 3
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    TextComponent textExample
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        INSTRUÇÕES

        Por exemplo:
        Se você der 5€ ao Participante 2, ele vai receber 15€.

        Ele pode escolher dividir os 15€ de qualquer forma.

        Pode não partilhar e escolher ficar com os 15€.
  Routine EndFeedback
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    TextComponent textfinal
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $ITI_duration
      text [set every repeat] = $EndFeedback
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        ITI_duration=int()
        EndFeedback=""


        if nReps==15:
            ITI_duration=10
            EndFeedback="Terminou o Jogo \n\n A sua pontuação final é de \n\n + {str(SelfScore)}€ \n\nIrá ser contactado posteriormente, caso seja selecionado no sorteio. \n\nMuito obrigada pela sua participação!"
        else:
            ITI_duration=1
            EndFeedback=""
Flow
  Routine CoverGame
  Routine Instructions1
  Routine Instructions2
  Routine Instructions3
  Routine Instructions4
  Routine InstructionEx
  Routine PracticeBegin
  Routine WaitJogo
  LoopInitiator trials1 loopType="TrialHandler"
    loopType = sequential
    nReps = 15
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    Routine trial
    Routine Decision1
    Routine WaitForResponse
    Routine response
    Routine Feedback
  LoopTerminator trials1
  Routine EndScreen
